
// This macro measures each cell sequentially according to privously extracted ROI. It calls each image in the folder, each roi in each image and measures according to your needs.

// You can execute this script in FIJI and modify it according to your specific needs to process your samples. Important: this script will only work, if the 
// paths to your folders are all correctly adressed. Make sure that all folders mentioned in the script are correct. For full automation, lease, do create the necessary folders where your raw data is located and the folders where your results
// will be stored. Attention! This script is case sensitive. So check the correct spelling of the names of the paths provided. However, if you are not confident with 
// full automation you can use the command "getDirectory("name of your path") instead of the prefixed liner 

macro "Measurements according to ROI" {

        run("Set Measurements...", "area mean min integrated limit display redirect=None decimal=3");
        dir1 = getDirectory("Choose an Image Directory ");
        dir2 = getDirectory("Choose an ROI file Directory");
        dir3 = getDirectory("Choose an Results Directory");
        setBatchMode(false);

        list = getFileList(dir1);
        list2 = getFileList(dir2);
         for (i=0; i<list.length; i++) {
                path = dir1+list[i];
                showProgress(i, list.length);
                open(path);
                title=getTitle();
                name=title;
                //loading ROIs here; this loop opens and closes roi sequentially after conducting the action you want (in this workflow "Measure" which is defined by "Set Measurements")
                                path2 = dir2+list2[i];
				roiManager("Open", path2);
                                roiManager("Deselect");
                                run("Subtract...", "value=100"); // here you can define how much background will be substracted. Just try...
                                roiManager("Measure");
                                saveAs("Results", dir3+name+".csv");
                                run("Clear Results");
                                roiManager("Delete");
                                close();

   
    }

         }
